{
    "actions": {
        "acqdatetime": {
            "filters": {},
            "params": {}
        },
        "header_series": {
            "filters": {},
            "params": {}
        },
        "qc_series": {
            "filters": {},
            "params": {
                "linrois": [
                    {
                        "HU": 112,
                        "angdeg": 0,
                        "diammm": 20.0,
                        "radmm": 0.0
                    },
                    {
                        "HU": -1000,
                        "angdeg": -45,
                        "diammm": 20.0,
                        "radmm": 185.0
                    },
                    {
                        "HU": 1.2,
                        "angdeg": 180,
                        "cutdiammm": 55,
                        "diammm": 20.0,
                        "radmm": 75.0,
                        "thresh_hi": 50
                    },
                    {
                        "HU": 941,
                        "angdeg": 0,
                        "cutdiammm": 55,
                        "diammm": 20.0,
                        "radmm": 75.0,
                        "thresh_lo": 250
                    }
                ],
                "noiserois": [
                    {
                        "angdeg": 0,
                        "diammm": 97.5,
                        "radmm": 0.0
                    }
                ],
                "phantom": {
                    "thresh_lo": -250
                },
                "unifrois": [
                    {
                        "angdeg": 0,
                        "diammm": 30,
                        "radmm": 0.0
                    },
                    {
                        "angdeg": -90,
                        "diammm": 30,
                        "radmm": 120.0
                    },
                    {
                        "angdeg": -45,
                        "diammm": 30,
                        "radmm": 120.0
                    }
                ]
            }
        }
    },
    "cfgformat": "20180910",
    "comments": {
        "author": "Arnold Schilham, UMCU",
        "creator": "generate_config_json.py version 20180912",
        "description": "CT/PerformanceQuickIQ2 for Philips Brilliance64 with IPatient",
        "version": "20210420"
    },
    "info": {
        "acqdatetime": {
            "params": {}
        },
        "header_series": {
            "params": {}
        },
        "qc_series": {
            "params": {
                "linrois": [
                    {
                        "HU": "linearity roi_0: groundtruth value (HU)",
                        "angdeg": "linearity roi_0: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "linearity roi_0: diameter of roi (mm)",
                        "radmm": "linearity roi_0: radial position of roi center from phantom center (mm)"
                    },
                    {
                        "HU": "linearity roi_1: groundtruth value (HU)",
                        "angdeg": "linearity roi_1: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "linearity roi_1: diameter of roi (mm)",
                        "radmm": "linearity roi_1: radial position of roi center from phantom center (mm)"
                    },
                    {
                        "HU": "linearity roi_2: groundtruth value (HU)",
                        "angdeg": "linearity roi_2: angular position of roi center wrt phantom center (degrees)",
                        "cutdiammm": "linearity roi_2: diameter of roi around insert position to look for shifted object center (mm)",
                        "diammm": "linearity roi_2: diameter of roi (mm)",
                        "radmm": "linearity roi_2: radial position of roi center from phantom center (mm)",
                        "thresh_hi": "linearity roi_2: maximum value when looking for insert (HU)"
                    },
                    {
                        "HU": "linearity roi_3: groundtruth value (HU)",
                        "angdeg": "linearity roi_3: angular position of roi center wrt phantom center (degrees)",
                        "cutdiammm": "linearity roi_3: diameter of roi around insert position to look for shifted object center (mm)",
                        "diammm": "linearity roi_3: diameter of roi (mm)",
                        "radmm": "linearity roi_3: radial position of roi center from phantom center (mm)",
                        "thresh_lo": "linearity roi_3: minimum value when looking for insert (HU)"
                    }
                ],
                "noiserois": [
                    {
                        "angdeg": "noise roi_0: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "noise roi_0: diameter of roi (mm)",
                        "radmm": "noise roi_0: radial position of roi center from phantom center (mm)"
                    }
                ],
                "phantom": {
                    "thresh_lo": "minimal value when looking for phantom (HU)"
                },
                "unifrois": [
                    {
                        "angdeg": "uniformity roi_0: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "uniformity roi_0: diameter of roi (mm)",
                        "radmm": "uniformity roi_0: radial position of roi center from phantom center (mm)"
                    },
                    {
                        "angdeg": "uniformity roi_1: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "uniformity roi_1: diameter of roi (mm)",
                        "radmm": "uniformity roi_1: radial position of roi center from phantom center (mm)"
                    },
                    {
                        "angdeg": "uniformity roi_2: angular position of roi center wrt phantom center (degrees)",
                        "diammm": "uniformity roi_2: diameter of roi (mm)",
                        "radmm": "uniformity roi_2: radial position of roi center from phantom center (mm)"
                    }
                ]
            }
        }
    }
}